PsychoPy2experiment version="2022.2.2"
Settings
  Experiment info = {'Prolific_PID*': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/face.jpg', 'stimuli/face2.png']
  Screen = 1
  Units = height
  Use version = 2022.2.2
  Window size (pixels) = [2560, 1440]
  color = 1.0000, 1.0000, 1.0000
  expName = draw_face_ver2
  keyboardBackend = ioHub
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Routines
  Routine trial
    ImageComponent face
      image = stimuli/face2.png
      saveStartStop = False
      size = (1.8, 0.429)
      startVal [time (s)] = 0.0
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    CodeComponent code_brush_2
      Code Type = Both
      Begin JS Routine:
        class ShapeStimCustom extends visual.ShapeStim {
          _getPixiPolygon() {
            super._getPixiPolygon()
            this._pixiPolygon_px.closeStroke = this._closeShape;
            return this._pixiPolygon_px;
          }
        }

        polygon_vertex = [[0, 0]];
        polygon_vertex = [];
        polygon_list = [];
        Empty_shapes = 100;
        for (var i = 0, _pj_a = Empty_shapes; (i < _pj_a); i += 1) {
            let i_polygon = new ShapeStimCustom({win: psychoJS.window,
            "vertices": polygon_vertex,
            "closeShape": false,
            "lineWidth": 4,
            lineColor: new util.Color([-1, -1, -1])});
            i_polygon.setAutoDraw(false);
            polygon_list.push(i_polygon);
        }

        CircleListList = [];
        CircleList=[];
        CircleCordsList=[];

        CircleSize=[0.004,0.004];
        CircleEdges=99;
        CircleOpac=1;

        indx_shape = 0;
        Drawing = false;
        FirstUndoClick = true;
        Exit = false;
        Actionsincldel = 0;
        ActionsNotincldel = 0;
        NoDels = 0;
        DrawRTs = [];
        DelRTs = [];
        LineLengths = [];
        LineDurations = [];

        startTime = globalClock.getTime();
        Diff=0
      Begin Routine:
        ##### Prepare some variables ######
        polygon_vertex = [(0,0)]
        polygon_list = []

        Empty_shapes = 100
        for i in range(Empty_shapes):
            polygon_list.append(visual.ShapeStim(win, vertices=polygon_vertex,closeShape=False,
                                                 fillColor=None, lineWidth=4, lineColor='black'))

        indx_shape = 0      # How many lines drawn so far
        Drawing = False #variable necessary to only add new lines when mouse stops being clicked, and to initialise
        #new lines when mouse is clicked again
        FirstUndoClick=True #this variable stops Undo from deleting multiple lines for as long as Undo button is clocked
        Exit=False # tells the task to take a screenshot and move on, when time limit reached

        # Prep some  Measurement vars
        Actionsincldel=0 #number of actions (lines drawn) including deleted ones
        ActionsNotincldel=0 #number of actions (lines drawn) not including deletes
        NoDels=0
        DrawRTs=[]
        DelRTs=[]
        LineLengths=[]
        LineDurations=[]

        TimeLim=sketch_time

        ### GET TIMER READY ####
        startTime=globalClock.getTime()

        timeRemaining=sketch_time
      Each Frame:
        ######### START DRAWING TASK ##########
        # For some reason current polygon must be worked on individually, but isnt't save back to polygon_list...
        polygon = polygon_list[indx_shape]
        ### DRAW LINES #####
        # If mouse is clicked, start/continue drawing
        if mouse_p.isPressedIn(face):
         # If mouse just clicked, start a new line (polygon), record RT
            if not Drawing:
                polygon_vertex = []
                Drawing = True #Prepare to recognise when mouse is not clicked
                DrawRTs.append(globalClock.getTime()-startTime) #record RTs
                LineStartTime=globalClock.getTime()

             # Update current polygon, with current mouse position
            polygon_vertex.append(mouse_p.getPos())
            polygon.vertices = polygon_vertex
        elif Drawing: #Once mouse stops being clicked, move on to next polygon
                Drawing = False
                LineLengths.append(len(polygon.vertices))
                LineDurations.append(globalClock.getTime()-LineStartTime)
                indx_shape += 1 #move on to a new shape
                Actionsincldel +=1 #increase number of actions
                ActionsNotincldel +=1 #increase number of actions


            ### Undo Button #####
        if mouse_p.isPressedIn(UndoButton) and FirstUndoClick and indx_shape>0: #So one click at a time will remove one shape
            UndoButton.fillColor='white'
            indx_shape -= 1 #go back to previous shape
            polygon = polygon_list[indx_shape]
            polygon.vertices = [(0,0)] #Set current polygon back to previous one, and return to an empty set
            FirstUndoClick=False
            NoDels+=1  #increase number of deletes
            DelRTs.append(globalClock.getTime()-startTime)#record RTs
            ActionsNotincldel -=1 #decrease number of actions
        elif not mouse_p.isPressedIn(UndoButton):
            UndoButton.fillColor='darkgray'
            FirstUndoClick=True


        ### Update Screen with lines #####
        #Draw all images, and prep back image so screenshot works
        face.draw()
        # Draw every polygon done so far
        for i_pol in range(indx_shape+1): #for all drawn shapes including current one
            polygon_list[i_pol].setAutoDraw(True)
            polygon_list[i_pol].draw()
      Each JS Frame:
        polygon = polygon_list[indx_shape];
        if (mouse.isPressedIn(face)) {
            if ((! Drawing)) {
                polygon_vertex = [];
                Drawing = true;
                DrawRTs.push((globalClock.getTime() - startTime));
                LineStartTime = globalClock.getTime();
            }
            polygon_vertex.push(mouse_p.getPos());
            polygon.vertices = polygon_vertex;
        } else {
            if (Drawing) {
                Drawing = false;
                LineLengths.push(polygon.vertices.length);
                LineDurations.push((globalClock.getTime() - LineStartTime));
                indx_shape += 1;
                Actionsincldel += 1;
                ActionsNotincldel += 1;
            }
        }
        if (((mouse.isPressedIn(UndoButton) && FirstUndoClick))) {
            UndoButton_2.fillColor = "white";
            indx_shape -= 1;
            polygon = polygon_list[indx_shape];
            polygon.vertices = [[0, 0]];
            FirstUndoClick = false;
            NoDels += 1;
            DelRTs.push((globalClock.getTime() - startTime));
            ActionsNotincldel -= 1;
        } else {
            if ((! mouse.isPressedIn(UndoButton_2))) {
                UndoButton_2.fillColor = "darkgray";
                FirstUndoClick = true;
            }
        }
        face.draw();
        for (var i_pol, _pj_c = 0, _pj_a = util.range((indx_shape + 1)), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i_pol = _pj_a[_pj_c];
            polygon_list[i_pol].setAutoDraw(true);
            polygon_list[i_pol].draw();
        }

        if (((mouse.isPressedIn(submit_button) && Exit) && (indx_shape > 0))) {
            submit_button.fillColor = "white";
            Exit = false;
        } else {
            if ((! mouse.isPressedIn(submit_button))) {
                submit_button.fillColor = "darkgray";
                Exit = true;
            }
        }
      End JS Routine:
        var addname, NoCircs

        AllPolygonVertices=[]

        psychoJS.experiment.addData("ActionsNotincldel", ActionsNotincldel)
        psychoJS.experiment.addData("Actionsincldel", Actionsincldel)
        psychoJS.experiment.addData("NoDels", NoDels)
        psychoJS.experiment.addData("DrawRTs", DrawRTs)
        psychoJS.experiment.addData("DelRTs", DelRTs)
        psychoJS.experiment.addData("LineLengths", LineLengths)
        psychoJS.experiment.addData("LineDurations", LineDurations)

        for (var i_pol = 0, _pj_a = indx_shape; (i_pol < _pj_a); i_pol += 1) {
            polygon_list[i_pol].setAutoDraw(false);
            AllPolygonVertices.push(polygon_list[i_pol].vertices);
            //addname = ("Line" + i_pol.toString());
            //psychoJS.experiment.addData(addname, polygon_list[i_pol].vertices)
        }

        for (var i_pol = 0, _pj_a = (CircleListList.length); (i_pol < _pj_a); i_pol += 1) {
            NoCircs=CircleListList[i_pol].length;
            for (var i_pol2 = 0, _pj_a2 = NoCircs; (i_pol2 < _pj_a2); i_pol2 += 1) {
            CircleListList[i_pol][i_pol2].setAutoDraw(false);
            }
        }


        psychoJS.experiment.addData("Circles", CircleCordsList);
        psychoJS.experiment.addData("Lines", AllPolygonVertices)
        //clear all circles
        CircleList=[];
        CircleListList=[];
        //psychoJS.window.color = (0, 0, 0)
        //psychoJS.window.clearBuffer({"color": true})
        //psychoJS.window.depthMask = true
        //psychoJS.window.clearBuffer({"color": false, "depth": true, "stencil": false});
        //psychoJS.window.flip({"clearBuffer": true});
      End Routine:
        #Store vars in Excel

        thisExp.addData('screen_width', psychoJS.window.size[0])
        thisExp.addData('screen_height', psychoJS.window.size[1])
        thisExp.addData('ActionsNotincldel', ActionsNotincldel)
        thisExp.addData('Actionsincldel', Actionsincldel)
        thisExp.addData('NoDels', NoDels)
        thisExp.addData('DrawRTs', DrawRTs)
        thisExp.addData('DelRTs', DelRTs)
        thisExp.addData('LineLengths', LineLengths)
        thisExp.addData('LineDurations', LineDurations)

        for i_pol in range(len(polygon_list)):
            polygon_list[i_pol].setAutoDraw(False)
            addname="Line"+str(i_pol)
            thisExp.addData(addname, polygon_list[i_pol].vertices.tolist())

        thisExp.addData('ActionsNotincldel', ActionsNotincldel)
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        text.text = "For each scenario, draw a mouth and eyebrows on the face below it to depict the facial expression the person would most likely make:"
        text_1.text = "A person visiting a playroom with block\ntowers decides to destroy a tower for fun"
        text_2.text = "A person visiting a playroom with block\ntowers decides to build a tower for fun"
        text_3.text = "A person in a tower engineering competition\ndecides to destroy a competitor’s tower"

        # Initialize countdown for Submit button
        countdown_duration = 3
        countdown_clock = util.Clock()
        countdown_started = False
      Each Frame:
        # Countdown for Submit button
        if mouse.isPressedIn(submit_button) and not countdown_started:
            countdown_clock.reset()
            countdown_started = True

        if countdown_started:
            remaining_time = countdown_duration - countdown_clock.getTime()
            if remaining_time > 0:
                count_text.text = f"Saving... {int(remaining_time)}s"
            else:
                continueRoutine = False
    TextComponent text
      color = black
      letterHeight = 0.025
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    TextComponent text_1
      color = black
      letterHeight = 0.023
      pos = [-0.52, 0.3]
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.45
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    TextComponent text_2
      color = black
      letterHeight = 0.023
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.45
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    TextComponent text_3
      color = black
      letterHeight = 0.023
      pos = (0.52, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.45
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    TextComponent count_text
      color = black
      letterHeight = 0.03
      pos = [0, -0.45]
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent submit_button
      fillColor = darkgrey
      pos = [0.12, -0.35]
      saveStartStop = False
      shape = rectangle
      size = [0.15,0.05]
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      color = black
      letterHeight = 0.03
      pos = [0.12, -0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Submit
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    PolygonComponent UndoButton_2
      fillColor = darkgray
      pos = (-0.12, -0.35)
      saveStartStop = False
      shape = rectangle
      size = [0.15,0.05]
      startVal [time (s)] = 0
      units = height
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    TextComponent UndoText_2
      color = black
      letterHeight = 0.03
      pos = (-0.12, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Undo Last
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  Routine ITI
    PolygonComponent polygon
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine welcome_screen
    TextComponent welcome_text
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        This experiment requires you to be in full-screen mode. (Don't worry, we will return your browser window to its normal size later.) If you do need to leave in the middle, you can press the ESC key — but please avoid this; your responses are only useful to us if you stay in this mode until the end of the experiment.

        Press the spacebar to continue.
    KeyboardComponent welcome_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.0
      store = nothing
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  Routine welcome_screen_2
    TextComponent welcome_text_3
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please ensure the following:

        (1) That you are in a room with no distractions (no people, music, phones etc)

        (2) That you are on a laptop or desktop computer, with the study in fullscreen mode

        (3) That for the next 2 minutes, you will be able to keep the study fullscreen, and to stay focused on the task

        As the study progresses, you may find that you start to feel tired or bored. Please do your best to stay focused throughout, however, since our research depends on it!

        Press the spacebar to begin.
    KeyboardComponent welcome_resp_3
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine end_screen
    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        document.body.style.cursor='auto';
        end_text.text = 'Thank you for participating!\n\nPress the spacebar to continue on to the study debriefing questions.\n\nPlease wait until the experiment is done saving your data (this may take several seconds), and then press OK once the green pop-up appears.'
    TextComponent end_text
      color = black
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.5
      wrapWidth = 1.25
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    KeyboardComponent end_resp
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine practice_2
    ImageComponent face_p
      image = stimuli/face.jpg
      saveStartStop = False
      size = (0.6, 0.429)
      startVal [time (s)] = 0.0
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    CodeComponent code_setup
      Code Type = Both
      Begin Experiment:
        from PIL import Image
        import os, time
        import shutil          #copy & C
        import numpy as np
        win.mouseVisible = False

        #CHANGE DEBUG TO TRUE TO REDUCE TIMES OF EVERYTHING
        #SEE BELOW TO ADJUST TIMES MANUALLY
        Debug=True

        Pnum=int(float(expInfo['participant']))

        #DEBUG TIMES

        sketch_time     = 10    # 20s  #time to sketch
      Begin JS Experiment:
        class ShapeStimCustom extends visual.ShapeStim {
          _getPixiPolygon() {
            super._getPixiPolygon()
            this._pixiPolygon_px.closeStroke = this._closeShape;
            return this._pixiPolygon_px;
          }
        }


        Empty_shapes = 100;
        range = (start, stop, step = 1) =>
          Array(Math.ceil((stop - start) / step)).fill(start).map((x, y) => x + y * step)


        roundOne = (n, d) => Math.round(n * Math.pow(10, d)) / Math.pow(10, d)

        RepArray = (K,n=1) => Array.from({length:n}).map(x => K)
    CodeComponent code_brush
      Code Type = Both
      Begin JS Routine:
        class ShapeStimCustom_p extends visual.ShapeStim {
          _getPixiPolygon() {
            super._getPixiPolygon()
            this._pixiPolygon_px.closeStroke = this._closeShape;
            return this._pixiPolygon_px;
          }
        }

        polygon_vertex_p = [[0, 0]];
        polygon_vertex_p = [];
        polygon_list_p = [];
        Empty_shapes_p = 100;
        for (var i = 0, _pj_a = Empty_shapes_p; (i < _pj_a); i += 1) {
            let i_polygon_p = new ShapeStimCustom_p({win: psychoJS.window,
            "vertices": polygon_vertex_p,
            "closeShape": false,
            "lineWidth": 4,
            lineColor: new util.Color([-1, -1, -1])});
            i_polygon_p.setAutoDraw(false);
            polygon_list_p.push(i_polygon_p);
        }

        CircleListList_p = [];
        CircleList_p=[];
        CircleCordsList_p=[];

        CircleSize_p=[0.004,0.004];
        CircleEdges_p=99;
        CircleOpac_p=1;

        indx_shape_p = 0;
        Drawing_p = false;
        FirstUndoClick_p = true;
        Exit_p = false;
        Actionsincldel_p = 0;
        ActionsNotincldel_p = 0;
        NoDels_p = 0;
        DrawRTs_p = [];
        DelRTs_p = [];
        LineLengths_p = [];
        LineDurations_p = [];

        startTime_p = globalClock.getTime();
        Diff_p=0
      Begin Routine:
        ##### Prepare some variables ######
        polygon_vertex_p = [(0,0)]
        polygon_list_p = []

        Empty_shapes_p = 100
        for i in range(Empty_shapes_p):
            polygon_list_p.append(visual.ShapeStim(win, vertices=polygon_vertex_p,closeShape=False,
                                                 fillColor=None, lineWidth=4, lineColor='black'))

        indx_shape_p = 0      # How many lines drawn so far
        Drawing_p = False #variable necessary to only add new lines when mouse stops being clicked, and to initialise
        #new lines when mouse is clicked again
        FirstUndoClick_p=True #this variable stops Undo from deleting multiple lines for as long as Undo button is clocked
        Exit_p=False # tells the task to take a screenshot and move on, when time limit reached

        # Prep some  Measurement vars
        Actionsincldel_p=0 #number of actions (lines drawn) including deleted ones
        ActionsNotincldel_p=0 #number of actions (lines drawn) not including deletes
        NoDels_p=0
        DrawRTs_p=[]
        DelRTs_p=[]
        LineLengths_p=[]
        LineDurations_p=[]

        ### GET TIMER READY ####
        startTime_p=globalClock.getTime()
      Each Frame:
        ######### START DRAWING TASK ##########
        # For some reason current polygon must be worked on individually, but isnt't save back to polygon_list...
        polygon_p = polygon_list_p[indx_shape_p]
        ### DRAW LINES #####
        # If mouse is clicked, start/continue drawing
        if mouse_p.isPressedIn(face_p):
         # If mouse just clicked, start a new line (polygon), record RT
            if not Drawing_p:
                polygon_vertex_p = []
                Drawing_p = True #Prepare to recognise when mouse is not clicked
                DrawRTs_p.append(globalClock.getTime()-startTime_p) #record RTs
                LineStartTime_p=globalClock.getTime()

             # Update current polygon, with current mouse position
            polygon_vertex_p.append(mouse_p.getPos())
            polygon_p.vertices = polygon_vertex_p
        elif Drawing_p: #Once mouse stops being clicked, move on to next polygon
                Drawing_p = False
                LineLengths_p.append(len(polygon_p.vertices))
                LineDurations_p.append(globalClock.getTime()-LineStartTime_p)
                indx_shape_p += 1 #move on to a new shape
                Actionsincldel_p +=1 #increase number of actions
                ActionsNotincldel_p +=1 #increase number of actions


            ### Undo Button #####
        if mouse_p.isPressedIn(UndoButton) and FirstUndoClick_p and indx_shape_p>0: #So one click at a time will remove one shape
            UndoButton.fillColor='white'
            indx_shape_p -= 1 #go back to previous shape
            polygon_p = polygon_list_p[indx_shape_p]
            polygon_p.vertices = [(0,0)] #Set current polygon back to previous one, and return to an empty set
            FirstUndoClick_p=False
            NoDels_p+=1  #increase number of deletes
            DelRTs_p.append(globalClock.getTime()-startTime_p)#record RTs
            ActionsNotincldel_p -=1 #decrease number of actions
        elif not mouse_p.isPressedIn(UndoButton):
            UndoButton.fillColor='darkgray'
            FirstUndoClick_p=True


        ### Update Screen with lines #####
        #Draw all images, and prep back image so screenshot works
        face_p.draw()
        # Draw every polygon done so far
        for i_pol in range(indx_shape_p+1): #for all drawn shapes including current one
            polygon_list_p[i_pol].setAutoDraw(True)
            polygon_list_p[i_pol].draw()
      Each JS Frame:
        polygon_p = polygon_list_p[indx_shape_p];
        if (mouse_p.isPressedIn(face_p)) {
            if ((! Drawing_p)) {
                polygon_vertex_p = [];
                Drawing_p = true;
                DrawRTs_p.push((globalClock.getTime() - startTime_p));
                LineStartTime_p = globalClock.getTime();
            }
            polygon_vertex_p.push(mouse_p.getPos());
            polygon_p.vertices = polygon_vertex_p;
        } else {
            if (Drawing_p) {
                Drawing_p = false;
                LineLengths_p.push(polygon_p.vertices.length);
                LineDurations_p.push((globalClock.getTime() - LineStartTime_p));
                indx_shape_p += 1;
                Actionsincldel_p += 1;
                ActionsNotincldel_p += 1;
            }
        }
        if (((mouse_p.isPressedIn(UndoButton) && FirstUndoClick_p) && (indx_shape_p > 0))) {
            UndoButton.fillColor = "white";
            indx_shape_p -= 1;
            polygon_p = polygon_list_p[indx_shape_p];
            polygon_p.vertices = [[0, 0]];
            FirstUndoClick_p = false;
            NoDels_p += 1;
            DelRTs_p.push((globalClock.getTime() - startTime_p));
            ActionsNotincldel_p -= 1;
        } else {
            if ((! mouse_p.isPressedIn(UndoButton))) {
                UndoButton.fillColor = "darkgray";
                FirstUndoClick_p = true;
            }
        }
        face_p.draw();
        for (var i_pol, _pj_c = 0, _pj_a = util.range((indx_shape_p + 1)), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i_pol = _pj_a[_pj_c];
            polygon_list_p[i_pol].setAutoDraw(true);
            polygon_list_p[i_pol].draw();
        }

        if (((mouse_p.isPressedIn(submit_button_p) && Exit_p))) {
            submit_button_p.fillColor = "white";
            Exit_p = false;
        } else {
            if ((! mouse_p.isPressedIn(submit_button_p))) {
                submit_button_p.fillColor = "darkgray";
                Exit_p = true;
            }
        }
      End JS Routine:
        var addname, NoCircs

        AllPolygonVertices_p=[]

        psychoJS.experiment.addData("ActionsNotincldel", ActionsNotincldel_p)
        psychoJS.experiment.addData("Actionsincldel", Actionsincldel_p)
        psychoJS.experiment.addData("NoDels", NoDels_p)
        psychoJS.experiment.addData("DrawRTs", DrawRTs_p)
        psychoJS.experiment.addData("DelRTs", DelRTs_p)
        psychoJS.experiment.addData("LineLengths", LineLengths_p)
        psychoJS.experiment.addData("LineDurations", LineDurations_p)

        for (var i_pol = 0, _pj_a = indx_shape_p; (i_pol < _pj_a); i_pol += 1) {
            polygon_list_p[i_pol].setAutoDraw(false);
            AllPolygonVertices_p.push(polygon_list_p[i_pol].vertices);
            //addname = ("Line" + i_pol.toString());
            //psychoJS.experiment.addData(addname, polygon_list[i_pol].vertices)
        }

        for (var i_pol = 0, _pj_a = (CircleListList_p.length); (i_pol < _pj_a); i_pol += 1) {
            NoCircs_p=CircleListList_p[i_pol].length;
            for (var i_pol2 = 0, _pj_a2 = NoCircs_p; (i_pol2 < _pj_a2); i_pol2 += 1) {
            CircleListList_p[i_pol][i_pol2].setAutoDraw(false);
            }
        }


        psychoJS.experiment.addData("Circles", CircleCordsList_p);
        psychoJS.experiment.addData("Lines", AllPolygonVertices_p)
        //clear all circles
        CircleList_p=[];
        CircleListList_p=[];
        //psychoJS.window.color = (0, 0, 0)
        //psychoJS.window.clearBuffer({"color": true})
        //psychoJS.window.depthMask = true
        //psychoJS.window.clearBuffer({"color": false, "depth": true, "stencil": false});
        //psychoJS.window.flip({"clearBuffer": true});
      End Routine:
        #Store vars in Excel

        thisExp.addData('screen_width', psychoJS.window.size[0])
        thisExp.addData('screen_height', psychoJS.window.size[1])
        thisExp.addData('ActionsNotincldel', ActionsNotincldel_p)
        thisExp.addData('Actionsincldel', Actionsincldel_p)
        thisExp.addData('NoDels', NoDels_p)
        thisExp.addData('DrawRTs', DrawRTs_p)
        thisExp.addData('DelRTs', DelRTs_p)
        thisExp.addData('LineLengths', LineLengths_p)
        thisExp.addData('LineDurations', LineDurations_p)

        for i_pol in range(len(polygon_list_p)):
            polygon_list_p[i_pol].setAutoDraw(False)
            addname="Line"+str(i_pol)
            thisExp.addData(addname, polygon_list_p[i_pol].vertices_p.tolist())

        thisExp.addData('ActionsNotincldel', ActionsNotincldel_p)
    CodeComponent code_p
      Code Type = Auto->JS
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      Begin Routine:
        text_p.text = "Practice: Please draw *a mouth and eyebrows* on the face."

        countdown_duration = 3
        countdown_clock = util.Clock()
        countdown_started = False
      Each Frame:
        # Handle the submit button and countdown
        if mouse_p.isPressedIn(submit_button_p) and not countdown_started:
            countdown_clock.reset()
            countdown_started = True

        if countdown_started:
            remaining_time = countdown_duration - countdown_clock.getTime()
            if remaining_time > 0:
                count_text_p.text = f"Saving... {int(remaining_time)}s"
            else:
                continueRoutine = False
    TextComponent text_p
      color = black
      letterHeight = 0.03
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    PolygonComponent submit_button_p
      fillColor = darkgrey
      pos = [0.12, -0.35]
      saveStartStop = False
      shape = rectangle
      size = [0.15,0.05]
      startVal [time (s)] = 0.0
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    TextComponent submit_text_p
      color = black
      letterHeight = 0.03
      pos = [0.12, -0.35]
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Submit
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    TextComponent count_text_p
      color = black
      letterHeight = 0.03
      pos = [0, -0.45]
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent UndoButton
      fillColor = darkgray
      pos = (-0.12, -0.35)
      saveStartStop = False
      shape = rectangle
      size = [0.15,0.05]
      startVal [time (s)] = 0
      units = height
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    TextComponent UndoText
      color = black
      letterHeight = 0.03
      pos = (-0.12, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0
      text = Undo Last
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    MouseComponent mouse_p
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = never
      saveParamsClickable = name,UndoButton
      saveStartStop = False
      startVal [time (s)] = 0
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  Routine welcome_screen_3
    TextComponent welcome_text_4
      color = $[-1.000,-1.000,-1.000]
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Draw Some Facial Expressions (2 min)

        In this study, we will ask you to draw a few facial expressions.

        Click and drag your mouse to draw, and use the buttons at the bottom to undo the last stroke, and to submit your responses.

        Let's start with a practice drawing. Press the spacebar to begin!
    KeyboardComponent welcome_resp_4
      allowedKeys = ['space']
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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Flow
  Routine welcome_screen
  Routine welcome_screen_2
  Routine welcome_screen_3
  Routine ITI
  Routine practice_2
  Routine ITI
  Routine trial
  Routine end_screen
